open("/media/backup/NpSurfaceCounter/testdata/aug_13_12/15000/f1_b1_15k21_low.tif");
//setTool("rectangle");
makeRectangle(1, 0, 1023, 628);
run("Crop");
saveAs("Tiff", "/media/backup/NpSurfaceCounter/RunResults/aug_13_12/15000/f1_b1_15k21_low/f1_b1_15k21_low_cropped.tif");
getHistogram(values, counts, 256);
d=File.open("/media/backup/NpSurfaceCounter/RunResults/aug_13_12/15000/f1_b1_15k21_low/f1_b1_15k21_low_greyscale.txt");
getThreshold(threshold, max);
for (k=0; k<values.length; k++) { print(d, k+" "+counts[k]);}
File.close(d);
run("Set Scale...", "distance=1 known=18.5133333333 pixel=1 unit=nm");
//run("Threshold...");
setThreshold(143, 255);
run("Despeckle");
run("Set Measurements...", "area mean standard modal min centroid center perimeter bounding fit shape feret's integrated median skewness kurtosis area_fraction stack limit redirect=None decimal=3");
run("Analyze Particles...", "size=0.0-Infinity circularity=0.0-1.0 show=Ellipses display clear exclude summarize");
saveAs("Results", "/media/backup/NpSurfaceCounter/RunResults/aug_13_12/15000/f1_b1_15k21_low/f1_b1_15k21_low_stats_full.txt");
saveAs("Tiff", "/media/backup/NpSurfaceCounter/RunResults/aug_13_12/15000/f1_b1_15k21_low/f1_b1_15k21_low_circles.tif");
close();
//run("Threshold...");
run("Convert to Mask");
getHistogram(values, counts, 256);
d=File.open("/media/backup/NpSurfaceCounter/RunResults/aug_13_12/15000/f1_b1_15k21_low/f1_b1_15k21_low_blackwhite.txt");
getThreshold(threshold, max);
for (k=0; k<values.length; k++) { print(d, k+" "+counts[k]);}
File.close(d);
saveAs("Tiff", "/media/backup/NpSurfaceCounter/RunResults/aug_13_12/15000/f1_b1_15k21_low/f1_b1_15k21_low_adjusted.tif");
close();